PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  exportHTML = manually
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine RULES
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    ImageComponent SETTING_IMAGE_2
      image = assets/setting.png
      opacity = 0.9
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent CONTINUE_KEY_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent RULE_TEXT_TITLE
      color = $(-1.0000, -1.0000, -0.9922)
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 规则
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    TextComponent RULE_TEXT_1
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1. 本次实验分为16个循环，每个循环的流程固定
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    TextComponent RULE_TEXT_2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2.循环开始，屏幕中心会出现一个红色小球，你需要盯着这个小球
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    TextComponent RULE_TEXT_3
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3.小球消失的瞬间，你需要按下空格键
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    TextComponent RULE_TEXT_4
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4.你按下空格键的同时，屏幕上会出现人或物的图片（可能倒立）
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    TextComponent RULE_TEXT_5
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5.你需要在辨认出人/物的瞬间按下SPACE
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    TextComponent RULE_TEXT_6
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        6.循环最后你需要写出你刚刚看到的人/物的名字（最好英文）
        （不要求完全正确，如ikun\caixukun\kunkun都算对）
    TextComponent RULE_TEXT_7
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      pos = (-0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 7.你需要坐起来做实验，准备好请按下SPACE
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        rule_texts = [
            RULE_TEXT_1,
            RULE_TEXT_2,
            RULE_TEXT_3,
            RULE_TEXT_4,
            RULE_TEXT_5,
            RULE_TEXT_6,
            RULE_TEXT_7
        ]

        for t in rule_texts:
            t.anchorHoriz = 'left'
            t.alignText = 'left'
            t.pos = (-0.64, t.pos[1])
  Routine HELLO
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    ImageComponent SETTING_IMAGE_1
      image = assets/setting.png
      opacity = 0.9
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent CONTINUE_KEY_1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent HELLO_TEXT
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 欢迎参加本次实验！
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    TextComponent DEMOSTRATION_TEXT
      color = $(-0.4902, -0.5059, -0.4902)
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        （按下 SPACE 键以了解实验规则）


        温馨提示：切换英文输入法体验更佳
  Routine POINT
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    ImageComponent SETTIGN_IMAGE_3
      image = assets/setting.png
      opacity = 0.9
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent CONTINUE_KEY_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    PolygonComponent Point
      fillColor = $(1.0000, -1.0000, -1.0000)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $point_duration
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        point_duration = 0.7 + 0.6 * random()
  Routine STIMULATE
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    ImageComponent SETTING_IMAGE_4
      image = assets/setting.png
      opacity = 0.9
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent CONTINUE_KEY_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent STIMULATE_IMAGE
      image [set every repeat] = $IMAGES
      ori [set every repeat] = actual_ori
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        base_condition = int(UP_SIDE_DOWN)
        participant_num = int(expInfo["participant"])

        if participant_num % 2 == 0:
            actual_condition = 1 - base_condition
        else:
            actual_condition = base_condition

        if actual_condition == 1:
            actual_ori = 180
        else:
            actual_ori = 0
  Routine RECORD
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    ImageComponent SETTING_IMAGE_5
      image = assets/setting.png
      opacity = 0.9
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent TITLE_TEXT
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 你刚刚看到了什么？
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    TextboxComponent INPUT
      bold = False
      color = $(-1.0000, -1.0000, -1.0000)
      editable = True
      formattingSyntax = md
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent SUBMMIT_KEY
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine THANKS
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    TextComponent THANKS_TEXT
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 感恩！
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    TextComponent THANKS_DETAILED_TEXT
      color = $(-0.4902, -0.5059, -0.4902)
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        王梓能够完成作业离不开你的支持

        （按下空格以结束）
    KeyboardComponent CONTINUE_KEY_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine HELLO
  Routine RULES
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'IMAGES': './assets/img1.jpg', 'UP_SIDE_DOWN': 1},
      {'IMAGES': './assets/img2.jpg', 'UP_SIDE_DOWN': 0},
      {'IMAGES': './assets/img3.jpg', 'UP_SIDE_DOWN': 1},
      {'IMAGES': './assets/img4.jpg', 'UP_SIDE_DOWN': 0},
      {'IMAGES': './assets/img5.jpg', 'UP_SIDE_DOWN': 1},
      {'IMAGES': './assets/img6.jpg', 'UP_SIDE_DOWN': 0},
      {'IMAGES': './assets/img7.jpg', 'UP_SIDE_DOWN': 1},
      {'IMAGES': './assets/img8.jpg', 'UP_SIDE_DOWN': 0}]
    Routine POINT
    Routine STIMULATE
    Routine RECORD
  LoopTerminator trials
  Routine THANKS
